CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "555")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TRANS")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['These are the best parameters for this channel.']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
    Select the input image:Hoechst
    Name the output image:IllumHoechst
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:["This was a very hard channel to correct for. These are the best parameters that could be used across all images, but it isn't perfect."]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
    Select the input image:ER
    Name the output image:IllumER
    Select how the illumination function is calculated:Background
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    Block size:350
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['These are the best parameters for this channel.']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
    Select the input image:AGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Background
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    Block size:200
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['These are the best parameters for this channel.']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
    Select the input image:Mito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Background
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    Block size:200
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:['These parameters are influenced by the JUMP consortium pipeline, but we found that fit polynomial did not over correct the images like seen with Median or Gaussian filters. These are the best parameters for this channel at this time.']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
    Select the input image:Brightfield
    Name the output image:IllumBrightfield
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:Brightfield
    Name the output image:CorrBrightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Select the input image:Hoechst
    Name the output image:CorrHoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Subtract
    Select the input image:ER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Subtract
    Select the input image:AGP
    Name the output image:CorrAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Subtract
    Select the input image:Mito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CorrHoechst
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CorrER
    Select method for constructing file names:From image filename
    Select image name for file prefix:ER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrAGP
    Select method for constructing file names:From image filename
    Select image name for file prefix:AGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CorrMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CorrBrightfield
    Select method for constructing file names:From image filename
    Select image name for file prefix:Brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
