CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['We use the Images module only when testing the pipeline in the GUI.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extract metadata to be able to connect the single-cells and organoids back to the correct well and site.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-Z]{1}[0-9]{1,2})-(?P<Site>[0-9]{1})_(?P<Channel>[0-9]*[A-Z]*)_(?P<ZSlice>ZS0[0-9]{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>NF00[0-9]{2})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign names to each greyscale image based on channel.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "405")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "555")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TRANS")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['We do not use groups in this pipeline.']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
    Do you want to group your images?:No
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
RunStarDist:[module_num:5|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notes:['Detect nuclei.']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
    Select the input image:Hoechst
    Model Type:2D
    Name the output object:Nuclei
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:No
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    Model folder:Elsewhere...|
    Model:Versatile (fluorescent nuclei)
    Model:3D_demo
    Probability threshold:0.6
    Overlap threshold:0.4
    Manually set how much GPU memory each worker can use?:No
    GPU memory (in GB) for each worker:0.5

IdentifySecondaryObjects:[module_num:6|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notes:['Detect whole cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:AGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2.6976
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Detect cytoplasm.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyPrimaryObjects:[module_num:8|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notes:['Detect whole organoids.']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
    Select the input image:AGP
    Name the primary objects to be identified:Organoids
    Typical diameter of objects, in pixel units (Min,Max):125,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2.6976
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureColocalization:[module_num:9|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notes:['Measure correlation/colocalization across images and objects with default parameters.']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
    Select images to measure:AGP, Brightfield, ER, Hoechst, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:10|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notes:['Measure granularity metrics within images and objects with default parameters.']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
    Select images to measure:AGP, Brightfield, ER, Hoechst, Mito
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:11|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notes:['Measure intensity metrics across all objects within all channels.']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
    Select images to measure:AGP, Brightfield, ER, Hoechst, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids

MeasureObjectIntensityDistribution:[module_num:12|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notes:['Measure object radial distribution metrics across all objects in all channels, using default parameters.']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
    Select images to measure:AGP, Brightfield, ER, Hoechst, Mito
    Hidden:4
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Organoids
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:13|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notes:['Measure the number of nuclei neighbors adjacent to each other.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:14|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notes:['Measure area shape features from all objects using default parameters.']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
    Select object sets to measure:Cells, Cytoplasm, Nuclei, Organoids
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:15|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notes:['Measure texture metrics across all images and objects across all channels using default parameters.']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
    Select images to measure:AGP, Brightfield, ER, Hoechst, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei, Organoids
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:16|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notes:['Export features to database to use with CytoTable for processing single-cells and organoids.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:gff_extracted_features.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:GFF_organoids
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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